<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C1.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C2.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C3.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C4.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C5.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C6_r.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C6.mzXML</file>
            <file>/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/Metabolomics_datasets/Zika/Negative/C7.mzXML</file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.01</min>
                <max>26.0</max>
            </retention_time>
            <polarity>NEGATIVE</polarity>
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">10000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.02</min>
                <max>26.02</max>
            </retention_time>
            <polarity>NEGATIVE</polarity>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">10000.0</parameter>
        <parameter name="Min highest intensity">100000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">5.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">10000.0</parameter>
                <parameter name="coefficient/area threshold">20.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.03</min>
                    <max>1.5</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.01</min>
                    <max>0.4</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original feature list">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.mztabexport.MzTabExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/Volumes/Macintosh HD/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/negative_mode/samples/zika/{}.mzTab</current_file>
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        </parameter>
        <parameter name="Include all peaks">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/Volumes/Macintosh HD/Volumes/Transcend2/17_20_PhD/19_20_PhD_Metabolomics/negative_mode/samples/zika/{}.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
